PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 20260225_DichoticPitchProject
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine PHASE_A_FileAcquisition
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Use up/down to set volume. Press space to continue.
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    KeyboardComponent keyList
      allowedKeys = ['up','down','left','right','space','escape']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent acq_code
      Code Type = Py
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      Begin Experiment:
        # --- Phase A (AcquireFiles) : Builder Code Component -> Begin Experiment ---
        # This block sets up labeled folders + per-WAV FFT CSV export + stimulus feature logs.
        # You will use the helper function save_wav_and_fft(...) inside your stimulus-generation loops.

        import os, json, time, csv
        import numpy as np
        from psychopy import sound
        import soundfile as sf

        # =========================
        # Folder structure per run
        # =========================
        root_out = os.path.join(thisExp.runtimePath, "OUTPUT")
        os.makedirs(root_out, exist_ok=True)

        run_id = time.strftime("%Y%m%d_%H%M%S")
        run_dir = os.path.join(root_out, f"RUN_{run_id}")
        os.makedirs(run_dir, exist_ok=True)

        # Phase A folders
        phaseA_dir  = os.path.join(run_dir, "PHASEA_FileAcquisition")
        phaseA_wav  = os.path.join(phaseA_dir, "WAV")
        phaseA_fft  = os.path.join(phaseA_dir, "FFT_CSV")
        phaseA_logs = os.path.join(phaseA_dir, "LOGS")

        for p in (phaseA_dir, phaseA_wav, phaseA_fft, phaseA_logs):
            os.makedirs(p, exist_ok=True)

        # PsychoPy audio settings
        fs = 48000
        base_dur = 0.75

        # Logs / manifests
        manifest_path      = os.path.join(phaseA_logs, "manifest.json")
        trial_list_path    = os.path.join(phaseA_logs, "trial_list.csv")
        mel_list_path      = os.path.join(phaseA_logs, "melody_list.csv")
        stim_features_csv  = os.path.join(phaseA_logs, "stim_features.csv")

        # Random generator (random each run unless you set a seed)
        rng = np.random.default_rng()

        # In-memory registry for everything generated this run
        items = []       # shams + stimuli
        mel_items = []   # melodies

        # =========================
        # Helper functions
        # =========================
        def normalize(x, peak=0.98):
            m = float(np.max(np.abs(x)))
            if m < 1e-12:
                return x
            return (x / m) * peak

        def compute_fft_csv(stereo, fs, out_csv_path, center_freq_hz=None, stim_id=None, stim_type=None):
            """
            Export FFT CSV for stereo signal:
            Frequency_Hz, Mag_L_dBFS, Mag_R_dBFS, Phase_L_rad, Phase_R_rad
            """
            stereo = np.asarray(stereo)
            if stereo.ndim != 2 or stereo.shape[1] != 2:
                raise ValueError("compute_fft_csv expects stereo array of shape (nSamples, 2)")

            xL = stereo[:, 0].astype(np.float64)
            xR = stereo[:, 1].astype(np.float64)

            XL = np.fft.rfft(xL)
            XR = np.fft.rfft(xR)
            freqs = np.fft.rfftfreq(len(xL), d=1.0/fs)

            eps = 1e-12
            # Rough dBFS-ish scaling (good for comparisons; not a calibrated SPL)
            magL = 20.0 * np.log10((np.abs(XL) / (len(xL)/2.0)) + eps)
            magR = 20.0 * np.log10((np.abs(XR) / (len(xR)/2.0)) + eps)

            phL = np.angle(XL)
            phR = np.angle(XR)

            with open(out_csv_path, "w", newline="", encoding="utf-8") as f:
                w = csv.writer(f)
                # metadata rows (easy to parse later)
                w.writerow(["meta", "run_id", run_id])
                if stim_id is not None:
                    w.writerow(["meta", "stim_id", stim_id])
                if stim_type is not None:
                    w.writerow(["meta", "stim_type", stim_type])
                w.writerow(["meta", "fs", fs])
                if center_freq_hz is not None:
                    w.writerow(["meta", "center_freq_hz", center_freq_hz])
                w.writerow(["Frequency_Hz", "Mag_L_dBFS", "Mag_R_dBFS", "Phase_L_rad", "Phase_R_rad"])
                for i in range(len(freqs)):
                    w.writerow([float(freqs[i]), float(magL[i]), float(magR[i]), float(phL[i]), float(phR[i])])

        def save_wav_and_fft(stereo, stim_id, stim_type, params, center_freq_hz=None, is_melody=False):
            """
            Saves:
              - stereo WAV into PHASEA/WAV
              - FFT CSV into PHASEA/FFT_CSV
            Registers:
              - items / mel_items list entries with paths + metadata
            """
            stereo = np.asarray(stereo, dtype=np.float32)
            if stereo.ndim != 2 or stereo.shape[1] != 2:
                raise ValueError("save_wav_and_fft expects stereo array of shape (nSamples, 2)")

            # safety normalize + clip
            stereo = normalize(stereo)
            stereo = np.clip(stereo, -1.0, 1.0)

            wav_name = f"{run_id}_{stim_id}.wav"
            wav_path = os.path.join(phaseA_wav, wav_name)
            sf.write(wav_path, stereo, fs, subtype="PCM_16")

            fft_name = f"{run_id}_{stim_id}_FFT.csv"
            fft_path = os.path.join(phaseA_fft, fft_name)
            compute_fft_csv(
                stereo, fs, fft_path,
                center_freq_hz=center_freq_hz,
                stim_id=stim_id,
                stim_type=stim_type
            )

            entry = {
                "run_id": run_id,
                "stimId": stim_id,
                "stimType": stim_type,         # "stim" / "sham" / "melody"
                "centerFreqHz": center_freq_hz,
                "wavPath": wav_path,
                "fftCsvPath": fft_path,
                "params": params
            }
            if is_melody:
                mel_items.append(entry)
            else:
                items.append(entry)

            return entry

        def write_phaseA_logs():
            """
            Call this AFTER you finish generating all shams/stims/melodies.
            Writes:
              - manifest.json (full detail)
              - stim_features.csv (easy spreadsheet view)
              - trial_list.csv and melody_list.csv for Builder loops
            """
            # full manifest
            manifest = {"run_id": run_id, "fs": fs, "items": items, "melodies": mel_items}
            with open(manifest_path, "w", encoding="utf-8") as f:
                json.dump(manifest, f, indent=2)

            # simple features CSV
            with open(stim_features_csv, "w", newline="", encoding="utf-8") as f:
                w = csv.writer(f)
                w.writerow(["run_id","stimId","stimType","centerFreqHz","wavPath","fftCsvPath"])
                for it in items + mel_items:
                    w.writerow([it["run_id"], it["stimId"], it["stimType"], it["centerFreqHz"], it["wavPath"], it["fftCsvPath"]])

            # Builder trial lists (CSV headers must match your loop variable names)
            with open(trial_list_path, "w", encoding="utf-8") as f:
                f.write("stimFile,stimType,stimId,centerFreqHz,fftCsvPath\n")
                for it in items:
                    f.write(f"{it['wavPath']},{it['stimType']},{it['stimId']},{it['centerFreqHz']},{it['fftCsvPath']}\n")

            with open(mel_list_path, "w", encoding="utf-8") as f:
                f.write("stimFile,stimType,stimId,centerFreqHz,fftCsvPath\n")
                for it in mel_items:
                    f.write(f"{it['wavPath']},{it['stimType']},{it['stimId']},{it['centerFreqHz']},{it['fftCsvPath']}\n")

            # make paths available to later Builder loops/routines
            expInfo["run_id"] = run_id
            expInfo["phaseA_dir"] = phaseA_dir
            expInfo["trial_list_path"] = trial_list_path
            expInfo["mel_list_path"] = mel_list_path
            expInfo["manifest_path"] = manifest_path
            expInfo["stim_features_csv"] = stim_features_csv

        # -------------------------
        # HOW TO USE IN YOUR LOOPS:
        # -------------------------
        # Wherever you currently do:
        #   sf.write(fpath, y, fs, subtype="PCM_16")
        # Replace it with:
        #   save_wav_and_fft(
        #       stereo=y,
        #       stim_id=params["id"],
        #       stim_type=params["kind"],           # "sham" or "stim" or "melody"
        #       params=params,
        #       center_freq_hz=params.get("carrier_hz", None),
        #       is_melody=(params["kind"] == "melody")
        #   )
        #
        # After generating all files, call once:
        #   write_phaseA_logs()
      Begin Routine:
        def normalize(x, peak=0.98):
            m = np.max(np.abs(x))
            if m < 1e-9:
                return x
            return (x / m) * peak

        def make_dichotic_stim(params, fs):
            """
            Replace this with YOUR dichotic pitch generator.
            Must return stereo float32 array shape (nSamples, 2) in [-1, 1].
            """
            dur = params["dur"]
            n = int(fs * dur)
            t = np.arange(n) / fs

            # Example placeholder: noise with a subtle phase manipulation
            noiseL = rng.normal(0, 1, n)
            noiseR = rng.normal(0, 1, n)

            # Fake "illusory pitch band" control param
            f = params["carrier_hz"]
            tone = np.sin(2*np.pi*f*t)

            if params["is_sham"]:
                # sham: no added structure
                yL = noiseL
                yR = noiseR
            else:
                # “stim”: add correlated structure differently per ear
                yL = noiseL + 0.15 * tone
                yR = noiseR + 0.15 * np.sin(2*np.pi*f*t + params["phase_offset_rad"])

            y = np.column_stack([yL, yR]).astype(np.float32)
            y = normalize(y)
            return y

        def make_melody(params, fs):
            """
            6 pitches in sequence. Returns stereo float32 array.
            """
            pitch_seq = params["pitch_seq_hz"]  # length 6
            note_dur = params["note_dur"]
            gap = params["gap"]
            chunks = []
            for f in pitch_seq:
                n = int(fs * note_dur)
                t = np.arange(n) / fs
                # Use the same dichotic “style” but change pitch each note:
                p = {
                    "dur": note_dur,
                    "carrier_hz": float(f),
                    "phase_offset_rad": params["phase_offset_rad"],
                    "is_sham": False
                }
                note = make_dichotic_stim(p, fs)
                chunks.append(note)
                if gap > 0:
                    chunks.append(np.zeros((int(fs*gap), 2), dtype=np.float32))
            y = np.vstack(chunks)
            y = normalize(y)
            return y

        # --- Generate 3 shams + 5 stimuli ---
        items = []
        ts = time.strftime("%Y%m%d_%H%M%S")

        # 3 shams
        for i in range(3):
            params = {
                "kind": "sham",
                "dur": base_dur,
                "carrier_hz": float(rng.choice([200, 250, 315, 400, 500, 630])),
                "phase_offset_rad": 0.0,
                "is_sham": True,
                "id": f"sham_{i+1}"
            }
            y = make_dichotic_stim(params, fs)
            fname = f"{ts}_{params['id']}.wav"
            fpath = os.path.join(out_dir, fname)
            sf.write(fpath, y, fs, subtype="PCM_16")
            items.append({"file": fpath, "type": "sham", "id": params["id"], "params": params})

        # 5 stimuli
        for i in range(5):
            params = {
                "kind": "stim",
                "dur": base_dur,
                "carrier_hz": float(rng.choice([200, 250, 315, 400, 500, 630])),
                "phase_offset_rad": float(rng.uniform(-np.pi, np.pi)),
                "is_sham": False,
                "id": f"stim_{i+1}"
            }
            y = make_dichotic_stim(params, fs)
            fname = f"{ts}_{params['id']}.wav"
            fpath = os.path.join(out_dir, fname)
            sf.write(fpath, y, fs, subtype="PCM_16")
            items.append({"file": fpath, "type": "stim", "id": params["id"], "params": params})

        # --- Generate 2 melodic files (each 6 pitches) ---
        mel_items = []
        for i in range(2):
            pitch_pool = np.array([220, 247, 277, 311, 349, 392, 440, 494], dtype=float)
            pitch_seq = rng.choice(pitch_pool, size=6, replace=True).tolist()
            params = {
                "kind": "melody",
                "pitch_seq_hz": pitch_seq,
                "note_dur": 0.35,
                "gap": 0.05,
                "phase_offset_rad": float(rng.uniform(-np.pi, np.pi)),
                "id": f"melody_{i+1}"
            }
            y = make_melody(params, fs)
            fname = f"{ts}_{params['id']}.wav"
            fpath = os.path.join(out_dir, fname)
            sf.write(fpath, y, fs, subtype="PCM_16")
            mel_items.append({"file": fpath, "type": "melody", "id": params["id"], "params": params})

        # Save manifest (for regeneration/compensation)
        manifest = {"fs": fs, "items": items, "melodies": mel_items, "timestamp": ts}
        with open(manifest_path, "w", encoding="utf-8") as f:
            json.dump(manifest, f, indent=2)

        # Write CSV trial lists Builder can read (simple columns)
        with open(trial_list_path, "w", encoding="utf-8") as f:
            f.write("stimFile,stimType,stimId\n")
            for it in items:
                f.write(f"{it['file']},{it['type']},{it['id']}\n")

        with open(mel_list_path, "w", encoding="utf-8") as f:
            f.write("stimFile,stimType,stimId\n")
            for it in mel_items:
                f.write(f"{it['file']},{it['type']},{it['id']}\n")

        # Make paths available later
        expInfo["trial_list_path"] = trial_list_path
        expInfo["mel_list_path"] = mel_list_path
        expInfo["manifest_path"] = manifest_path
  Routine PHASE_B__Calibration
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    CodeComponent cal_code
      Code Type = Py
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      Begin Experiment:
        # Default volume scalar (0.0 - 1.0). We'll store it and apply later.
        hp_volume = 0.3
      Begin Routine:
        # Simple stereo orientation test sounds
        fs_cal = 48000
        t = np.arange(int(fs_cal*0.25))/fs_cal
        beep = (0.2*np.sin(2*np.pi*800*t)).astype(np.float32)

        left_beep = np.column_stack([beep, np.zeros_like(beep)])
        right_beep = np.column_stack([np.zeros_like(beep), beep])

        snd_left = sound.Sound(value=left_beep, sampleRate=fs_cal, stereo=True)
        snd_right = sound.Sound(value=right_beep, sampleRate=fs_cal, stereo=True)

        # apply current volume
        snd_left.setVolume(hp_volume)
        snd_right.setVolume(hp_volume)

        cal_stage = 0  # 0 = waiting, 1 = played left, 2 = played right
      Each Frame:
        keys = cal_kb.getKeys(keyList=['up','down','left','right','space'], waitRelease=False)
        for k in keys:
            if k.name == 'up':
                hp_volume = min(1.0, hp_volume + 0.02)
            elif k.name == 'down':
                hp_volume = max(0.0, hp_volume - 0.02)
            elif k.name == 'left':
                snd_left.setVolume(hp_volume)
                snd_left.play()
            elif k.name == 'right':
                snd_right.setVolume(hp_volume)
                snd_right.play()
            elif k.name == 'space':
                continueRoutine = False

        # (Optional) update a Text component like: f"Volume: {hp_volume:.2f}"
      End Routine:
        # store chosen volume
        expInfo["hp_volume"] = hp_volume
        thisExp.addData("hp_volume", hp_volume)
  Routine HearingTest
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    CodeComponent hear_code
      Code Type = Py
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      Begin Experiment:
        from collections import defaultdict

        # Fixed test freqs (set frequencies per trial, as requested)
        test_freqs = [250, 500, 1000, 2000, 4000, 8000]

        # Simple threshold search levels (dB-like steps mapped to linear)
        # You can tune these levels. Start easier -> harder
        levels = [0.25, 0.18, 0.12, 0.08, 0.05, 0.03, 0.02]  # linear amplitude
        # Store results: threshold = lowest level heard (per ear)
        audiogram = {"L": {}, "R": {}}
      Begin Routine:
        # Determine which frequency and ear this iteration is (sequential)
        # We run 2 ears x len(test_freqs). If you want multiple repeats, set nReps>1.
        trial_index = hearing_loop.thisN  # 0..(2*len(freqs)-1)
        ear = "L" if trial_index < len(test_freqs) else "R"
        freq = test_freqs[trial_index % len(test_freqs)]

        # Simple descending method: play from loud to soft until "no"
        level_index = 0
        heard_last = True
        threshold_found = False

        # Build current tone
        fs_ht = 48000
        dur_ht = 0.5
        t = np.arange(int(fs_ht*dur_ht))/fs_ht
        tone = np.sin(2*np.pi*freq*t).astype(np.float32)

        def make_ear_tone(amp, ear):
            x = (amp * tone).astype(np.float32)
            if ear == "L":
                return np.column_stack([x, np.zeros_like(x)])
            else:
                return np.column_stack([np.zeros_like(x), x])

        current_amp = levels[level_index]
        stim_arr = make_ear_tone(current_amp, ear)
        ht_sound = sound.Sound(value=stim_arr, sampleRate=fs_ht, stereo=True)
        ht_sound.setVolume(float(expInfo.get("hp_volume", 0.3)))  # user calibration volume
        played_once = False
      Each Frame:
        # Play once at start
        if not played_once:
            ht_sound.play()
            played_once = True

        keys = ht_kb.getKeys(keyList=['y','n'], waitRelease=False)
        if keys:
            resp = keys[-1].name

            if resp == 'y':
                # go softer
                if level_index < len(levels) - 1:
                    level_index += 1
                    current_amp = levels[level_index]
                    stim_arr = make_ear_tone(current_amp, ear)
                    ht_sound = sound.Sound(value=stim_arr, sampleRate=fs_ht, stereo=True)
                    ht_sound.setVolume(float(expInfo.get("hp_volume", 0.3)))
                    played_once = False
                else:
                    # heard even at softest
                    audiogram[ear][freq] = levels[-1]
                    threshold_found = True
                    continueRoutine = False

            elif resp == 'n':
                # threshold is previous level (if any), else none
                if level_index == 0:
                    audiogram[ear][freq] = None  # not heard at max level
                else:
                    audiogram[ear][freq] = levels[level_index - 1]
                threshold_found = True
                continueRoutine = False
      End Routine:
        thisExp.addData("ht_ear", ear)
        thisExp.addData("ht_freq", freq)
        thisExp.addData("ht_threshold_amp", audiogram[ear][freq])
    KeyboardComponent yesno
      allowedKeys = ['y','n']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Confirm
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Did you hear it? (Y/N)
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  Routine PHASE_D_Preperation
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    CodeComponent prep_code
      Code Type = Py
      Begin Experiment:
        import json
        import numpy as np
        import soundfile as sf
        import os

        # Load manifest
        with open(expInfo["manifest_path"], "r", encoding="utf-8") as f:
            manifest = json.load(f)

        fs = int(manifest["fs"])
        hp_volume = float(expInfo.get("hp_volume", 0.3))

        # Convert audiogram thresholds into ear gains.
        # Simple rule: if threshold is high (needs louder), boost more.
        # If None (not heard at max), boost strongly but cap.
        def ear_gain_map(ear_dict):
            gains = {}
            for freq, thr in ear_dict.items():
                if thr is None:
                    gains[freq] = 2.5  # big boost cap
                else:
                    # normalize relative to easiest level
                    # smaller thr means good hearing -> less boost
                    gains[freq] = float(np.clip(levels[0] / max(thr, 1e-6), 0.8, 2.5))
            return gains

        gL = ear_gain_map(audiogram["L"])
        gR = ear_gain_map(audiogram["R"])

        # For a simple first version: use the median gain across tested freqs as a broadband per-ear gain
        L_gain = float(np.median(list(gL.values())))
        R_gain = float(np.median(list(gR.values())))

        comp_dir = os.path.join(out_dir, "compensated_audio")
        os.makedirs(comp_dir, exist_ok=True)

        def compensate_file(in_path):
            y, fsi = sf.read(in_path, dtype="float32", always_2d=True)
            if fsi != fs:
                # If mismatch, you should resample; keeping simple here:
                pass
            y[:, 0] *= L_gain
            y[:, 1] *= R_gain
            # normalize + safe cap
            y = np.clip(y, -1.0, 1.0)
            return y

        # Write compensated trial lists
        trial_list_comp = os.path.join(comp_dir, "trial_list_COMP.csv")
        mel_list_comp = os.path.join(comp_dir, "melody_list_COMP.csv")

        with open(trial_list_comp, "w", encoding="utf-8") as f:
            f.write("stimFile,stimType,stimId\n")
            for it in manifest["items"]:
                in_path = it["file"]
                base = os.path.splitext(os.path.basename(in_path))[0]
                out_path = os.path.join(comp_dir, base + "_COMP.wav")
                y = compensate_file(in_path)
                sf.write(out_path, y, fs, subtype="PCM_16")
                f.write(f"{out_path},{it['type']},{it['id']}\n")

        with open(mel_list_comp, "w", encoding="utf-8") as f:
            f.write("stimFile,stimType,stimId\n")
            for it in manifest["melodies"]:
                in_path = it["file"]
                base = os.path.splitext(os.path.basename(in_path))[0]
                out_path = os.path.join(comp_dir, base + "_COMP.wav")
                y = compensate_file(in_path)
                sf.write(out_path, y, fs, subtype="PCM_16")
                f.write(f"{out_path},{it['type']},{it['id']}\n")

        # Store paths for trial loops
        expInfo["trial_list_comp"] = trial_list_comp
        expInfo["mel_list_comp"] = mel_list_comp

        # Store gains used
        thisExp.addData("audiogram_L_gain", L_gain)
        thisExp.addData("audiogram_R_gain", R_gain)
  Routine Phase_E_Trial_Phase
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    SoundComponent SoundComponent
      forceEndRoutine = False
      sound [set every repeat] = $stimFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent yesno2
      allowedKeys = ['y','n']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Did you hear the pitch?
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    CodeComponent code
      Code Type = Py
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      End Routine:
        thisExp.addData("stimType", stimType)
        thisExp.addData("stimId", stimId)
        thisExp.addData("stimFile", stimFile)
  Routine MelodicTrials
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = $stimFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = How many pitches did you hear? (0–6)
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    KeyboardComponent melodic_resp
      allowedKeys = ['0','1','2','3','4','5','6']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        thisExp.addData("melody_id", stimId)
        thisExp.addData("melody_file", stimFile)
        # Keyboard component already logs the key; convert to int if you want:
        # thisExp.addData("melody_count", int(mel_kb.keys[0]) if mel_kb.keys else None)
Flow
  Routine PHASE_A_FileAcquisition
  Routine PHASE_B__Calibration
  LoopInitiator hearing_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2*len(test_freqs)
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    Routine HearingTest
  LoopTerminator hearing_loop
  Routine PHASE_D_Preperation
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Phase_E_Trial_Phase
  LoopTerminator trial_loop
  LoopInitiator mel_loop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine MelodicTrials
  LoopTerminator mel_loop
